PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = project
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent Start_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please don't move or blink
        If you ready, press [space bar]
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Set_var
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet

        # Create an LSL stream outlet for markers
        info = StreamInfo(name='MarkerStream', type='Markers', channel_count=1,
                          channel_format='string', source_id='faceMarker001')
        outlet = StreamOutlet(info)

        pressed_trials = set()
  Routine Ending
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Thnakyou for coming
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  Routine end_block
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    CodeComponent Save_Press
      Code Type = Auto->JS
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      End Experiment:
        thisExp.addData('pressed_trials', str(pressed_trials))
        print("Pressed trials:", pressed_trials)
        print("Data file will be saved to:", thisExp.dataFileName)
    TextComponent Endding
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Endding block
        Thankyou for your patient
  Routine trial_ex
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    CodeComponent random_fixation_time
      Code Type = Auto->JS
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      Begin Routine:
        import random
        fixation_duration = random.uniform(0.6, 1.0)
        #print(fixation_duration)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $fixation_duration
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  Routine faces
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    ImageComponent faces_image
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent response
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent response_space
      Code Type = Auto->JS
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      Each Frame:
        #print(f"Trial {trial} — keys: {response.keys}")
        #
        if response.keys and 'space' in response.keys:
            pressed_trials.add(trial)
    CodeComponent LSL_trigger
      Code Type = Auto->JS
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      Begin Routine:
        marker_code = {
            'unknown': 101,
            'known': 102,
        #    'personal': '30'
        }.get(type, 0)
        print(marker_code)
        #outlet.push_sample([str(marker_code)])
    SerialOutComponent serialPort
      baudrate = 115200
      bytesize = 8
      getResponse = False
      parity = N
      port = COM6
      startVal [time (s)] = 0.0
      startdata = $chr(marker_code)
      stopVal [duration (s)] = 1.0
      stopbits = 1
      stopdata = $chr(0)
      syncScreenRefresh = False
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Flow
  Routine Welcome
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = blocks/block_666.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block', 1), ('trial', 1), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 2), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 3), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 4), ('image', 'ball/blue.png'), ('type', 'known')]),
      OrderedDict([('block', 1), ('trial', 5), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 6), ('image', 'ball/blue.png'), ('type', 'known')]),
      OrderedDict([('block', 1), ('trial', 7), ('image', 'ball/blue.png'), ('type', 'known')]),
      OrderedDict([('block', 1), ('trial', 8), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 9), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 10), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 11), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 12), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 13), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 14), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 15), ('image', 'ball/red.png'), ('type', 'unknown')]),
      OrderedDict([('block', 1), ('trial', 16), ('image', 'ball/red.png'), ('type', 'unknown')])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
    Routine trial_ex
    Routine faces
  LoopTerminator trial_loop
  Routine end_block
